#  Example Qudi configuration file for testing.

global:
    # Optional global settings (startup modules, data directories, etc.)
    startup_modules: [pulsed_gui, odmr_gui, time_series_gui, qdplot_gui]
    default_data_dir: null
    daily_data_dirs: True

logic:
    # Master logic to coordinate pulse generation and measurement
    pulsed_master_logic:
        module.Class: 'pulsed.pulsed_master_logic.PulsedMasterLogic'
        connect:
            pulsedmeasurementlogic: 'pulsed_measurement_logic'
            sequencegeneratorlogic: 'sequence_generator_logic'

    # Logic for defining pulse sequence (waveforms, delays, etc.)
    sequence_generator_logic:
        module.Class: 'pulsed.sequence_generator_logic.SequenceGeneratorLogic'
        connect:
            pulsegenerator: 'pulser_dummy'

    # Logic for running a pulsed measurement and collecting counts
    pulsed_measurement_logic:
        module.Class: 'pulsed.pulsed_measurement_logic.PulsedMeasurementLogic'
        options:
            raw_data_save_type: 'text'
        connect:
            fastcounter: 'fast_counter_dummy'
            pulsegenerator: 'pulser_dummy'

    # Continuous-wave ODMR logic (scanning microwave frequency)
    odmr_logic:
        module.Class: 'odmr_logic.OdmrLogic'
        connect:
            microwave: 'microwave_dummy'
            data_scanner: 'finite_sampling_input_dummy'

    # Logic to read out time-traces (e.g. photon counts over time)
    time_series_reader_logic:
        module.Class: 'time_series_reader_logic.TimeSeriesReaderLogic'
        options:
            max_frame_rate: 20              # optional (default: 20Hz)
            channel_buffer_size: 1048576    # optional (default: 1MSample)
            max_raw_data_bytes: 1073741824  # optional (default: 1GB)
        connect:
            streamer: 'instream_dummy'

    # Laser conrol logic (e.g. for on/off or power of optical pulses)
    laser_logic:
        module.Class: 'laser_logic.LaserLogic'
        options:
            query_intervals: 0.1
        connect:
            laser: 'laser_dummy'

    # Plotting logic (for 2D visualization, optional)
    qdplot_logic:
        module.Class: 'qdplot_logic.QDPlotLogic'

hardware:
    # Dummy pulse generator (simulates an AWG or pulse generator)
    pulser_dummy:
        module.Class: 'dummy.pulser_dummy.PulserDummy'
        options:
            force_sequence_option: False

    # Dummy fast counter (simulates a gated photon counter / APD)
    fast_counter_dummy:
        module.Class: 'dummy.fast_counter_dummy.FastCounterDummy'
        options:
            gated: False
    
    # Dummy data stream (for arbitrary inputs, connected to time_series_logic)
    instream_dummy:
        module.Class: 'dummy.data_instream_dummy.InStreamDummy'
        options:
            channel_names: ['digital 1', 'analog 1', 'analog 2', 'digital 2']
            channel_units: ['Hz', 'V', 'V', 'Hz']
            channel_signals: ['counts', 'sine', 'sine', 'counts']
            data_type: 'float64'
            sample_timing: 'CONSTANT'

    # Dummy laser (e.g. for optical pumping/readout pulses)
    laser_dummy:
        module.Class: 'dummy.simple_laser_dummy.SimpleLaserDummy'

    # Dummy microwave source (for NV spin control)
    microwave_dummy:
        module.Class: 'dummy.microwave_dummy.MicrowaveDummy'

    # Dummy digitizer for continuous-wave scanning (e.g. for ODMR)
    finite_sampling_input_dummy:
        module.Class: 'dummy.finite_sampling_input_dummy.FiniteSamplingInputDummy'
        options: 
            simulation_mode: 'ODMR'
            sample_rate_limits: [1, 1e6]
            frame_size_limits: [1,1e9]
            channel_units:
                'APD count': 'c/s'
                'Photodiode': 'V'

gui:
    # Main GUI for pulsed measurements (sequence editor, run controls, etc.)
    pulsed_gui:
        module.Class: 'pulsed.pulsed_maingui.PulsedMeasurementGui'
        connect:
            pulsedmasterlogic: 'pulsed_master_logic'                # Connect GUI to master logic

    # GUI for continuous-wave ODMR experiments
    odmr_gui:
        module.Class: 'odmr.odmrgui.OdmrGui'
        connect:
            odmr_logic: 'odmr_logic'                                # Connect GUI to ODMR logic

    # GUI to view time-series data (raw photon counts vs time)
    time_series_gui:
        module.Class: 'time_series.time_series_gui.TimeSeriesGui'
        options:
            use_antialias: True
        connect:
            _time_series_logic_con: 'time_series_reader_logic'      # Connect GUI to time-series logic

    # GUI for laser controls (on/off, power settings)
    laser_gui:
        module.Class: 'laser.laser_gui.LaserGui'
        connect:
            laser_logic: 'laser_logic'                               # Connect GUI to laser control logic
    
    # GUI for 2D plotting/analysis (optional, e.g. for scanning or ODMR maps)
    qdplot_gui:
        module.Class: 'qdplot.qdplot_gui.QDPlotterGui'
        connect:
            qdplot_logic: 'qdplot_logic'